// CLIJ example macro: project3D.ijm
//
// This macro shows how a 3D projection can be done in the GPU.
//
// Author: Robert Haase
// January 2019
// ---------------------------------------------


run("Close All");

// Get test data
open("C:/structure/data/t1-head.tif");
//run("T1 Head (2.4M, 16-bits)");

angle_step = 10;

run("32-bit");
rename("original");

getDimensions(width, height, channels, depth, frames);

// reserve the right amount of memory for the result image
newImage("target", "32-bit black", width, height, 360 / angle_step + 1);

// reserve a bit more pixels in Z for translated and rotated image because we
// need space for the shoulders if we rotated the patient around the Y-axis
newImage("rotated", "32-bit black", width, height, depth * 2);
newImage("translated", "32-bit black", width, height, depth * 2);

// init GPU
run("CLIJ Macro Extensions", "cl_device=[Intel(R) UHD Graphics 620]");

// push images to GPU
Ext.CLIJ_push("original");
Ext.CLIJ_push("target");
Ext.CLIJ_push("translated");
Ext.CLIJ_push("rotated");

// cleanup imagej
run("Close All");

// we need to translate the stack in Z to get some space for the shoulders 
// when we rotate the head around the y-axis 
Ext.CLIJ_translate3D("original", "translated", 0, 0, depth / 4);
	
count = 0;
for (angle = 0; angle < 360; angle += angle_step) {
	Ext.CLIJ_rotate3D("translated", "rotated", 0, angle, 0.0, true);
	Ext.CLIJ_maximumZProjection("rotated", "maxProjected");

	// put the maximum projection in the right place in the result stack
	Ext.CLIJ_copySlice("maxProjected", "target", count);
	
	count++;
}

// show result
Ext.CLIJ_pull("target");